# Generated by Configurator on Mon Nov 18 19:25:36 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,Camera,DemoCamera,DCam
Device,Z,DemoCamera,DStage
Device,XY,DemoCamera,DXYStage
Device,G2SBigTiffStorage,Go2Scope,G2SBigTiffStorage
Device,TTLSwitch,DemoCamera,DWheel

# Pre-init settings for devices
Property,Camera,MaximumExposureMs,10000.0

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Camera,DHub
Parent,Z,DHub
Parent,XY,DHub
Parent,TTLSwitch,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Z,0

# Roles
Property,Core,Camera,Camera
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TTLSwitch
Label,TTLSwitch,9,State-9
Label,TTLSwitch,8,State-8
Label,TTLSwitch,7,State-7
Label,TTLSwitch,6,State-6
Label,TTLSwitch,5,State-5
Label,TTLSwitch,4,State-4
Label,TTLSwitch,3,State-3
Label,TTLSwitch,2,State-2
Label,TTLSwitch,1,State-1
Label,TTLSwitch,0,State-0

# Configuration presets
# Group: Channel
# Preset: CYAN
ConfigGroup,Channel,CYAN,TTLSwitch,State,0

# Preset: RED
ConfigGroup,Channel,RED,TTLSwitch,State,2

# Preset: GREEN
ConfigGroup,Channel,GREEN,TTLSwitch,State,1

# Preset: VIOLET
ConfigGroup,Channel,VIOLET,TTLSwitch,State,3


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,OnCameraCCDXSize,2368
ConfigGroup,System,Startup,Camera,OnCameraCCDYSize,2368
ConfigGroup,System,Startup,Camera,PixelType,16bit



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Camera,CameraName,DemoCamera-MultiMode
PixelSize_um,Res0,1.5
PixelSizeAffine,Res0,1.0,0.0,0.0,0.0,1.0,0.0

