# Generated by Configurator on Fri Oct 04 14:43:23 PDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,OkoLab,Okolab,OkoLab

# Pre-init settings for devices
Property,OkoLab,Device Adapter Version,2.2.0
Property,OkoLab,Device Port,COM10
Property,OkoLab,Okolib Version,1.3.0.0
Property,OkoLab,Time between refresh [ms],1000

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

