# Generated by Configurator on Wed Nov 13 08:38:37 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TTLSwitch,Lumencor,TTLSwitch
Device,XYStage,Lumencor,DoverXYStage
Device,ZStage,Lumencor,DoverStage
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective

# Pre-init settings for devices
Property,COM1,AnswerTimeout,5000.0
Property,COM1,BaudRate,115200
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,TTLSwitch,Connection,192.168.201.200
Property,TTLSwitch,Port,COM1

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DObjective,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: CYAN_exp
# Preset: NewPreset
ConfigGroup,CYAN_exp,NewPreset,TTLSwitch,CYAN_ExposureMs,5.0000


# Group: RED_exp
# Preset: NewPreset
ConfigGroup,RED_exp,NewPreset,TTLSwitch,RED_ExposureMs,5.0000


# Group: CYAN_int
# Preset: NewPreset
ConfigGroup,CYAN_int,NewPreset,TTLSwitch,CYAN_Intensity,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TTLSwitch,CYAN_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,GREEN_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,RED_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,VIOLET_Intensity,500
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],VSYNC
ConfigGroup,System,Startup,XYStage,TransposeMirrorX,1
ConfigGroup,System,Startup,XYStage,TransposeMirrorY,1

# Preset: Shutdown
ConfigGroup,System,Shutdown,TTLSwitch,CYAN_Intensity,0
ConfigGroup,System,Shutdown,TTLSwitch,GREEN_Intensity,0
ConfigGroup,System,Shutdown,TTLSwitch,RED_Intensity,0
ConfigGroup,System,Shutdown,TTLSwitch,VIOLET_Intensity,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],LOW
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],NEGATIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,System,Shutdown,XYStage,TransposeMirrorX,0
ConfigGroup,System,Shutdown,XYStage,TransposeMirrorY,0


# Group: RED_int
# Preset: NewPreset
ConfigGroup,RED_int,NewPreset,TTLSwitch,RED_Intensity,0


# Group: GREEN_exp
# Preset: NewPreset
ConfigGroup,GREEN_exp,NewPreset,TTLSwitch,GREEN_ExposureMs,5.0000


# Group: VIOLET_exp
# Preset: NewPreset
ConfigGroup,VIOLET_exp,NewPreset,TTLSwitch,VIOLET_ExposureMs,5.0000


# Group: GREEN_int
# Preset: NewPreset
ConfigGroup,GREEN_int,NewPreset,TTLSwitch,GREEN_Intensity,0


# Group: VIOLET_int
# Preset: NewPreset
ConfigGroup,VIOLET_int,NewPreset,TTLSwitch,VIOLET_Intensity,0


# Group: CHANNEL
# Preset: CYAN
ConfigGroup,CHANNEL,CYAN,TTLSwitch,Label,CYAN

# Preset: RED
ConfigGroup,CHANNEL,RED,TTLSwitch,Label,RED

# Preset: GREEN
ConfigGroup,CHANNEL,GREEN,TTLSwitch,Label,GREEN

# Preset: VIOLET
ConfigGroup,CHANNEL,VIOLET,TTLSwitch,Label,VIOLET



# PixelSize settings
# Resolution preset: 3X
ConfigPixelSize,3X,HamamatsuHam_DCAM,CameraName,C16240-20UP
PixelSize_um,3X,1.5535
PixelSizeAffine,3X,-1.5495061299690158,0.019414679478257566,0.0,0.0017806472768335075,1.5575173288927935,0.0

