# Generated by Configurator on Thu Oct 03 14:06:19 PDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,DoverXYStage,Lumencor,DoverXYStage
Device,DoverStage,Lumencor,DoverStage
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,DoverStage,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,DoverStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

