# Generated by Configurator on Wed Dec 04 20:24:14 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TTLSwitch,Lumencor,TTLSwitch
Device,G2SBigTiffStorage,Go2Scope,G2SBigTiffStorage

# Pre-init settings for devices
Property,COM1,AnswerTimeout,2000.0000
Property,COM1,BaudRate,115200
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,TTLSwitch,Connection,192.168.201.200
Property,TTLSwitch,Port,COM1

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: CYAN_exp
# Preset: NewPreset
ConfigGroup,CYAN_exp,NewPreset,TTLSwitch,CYAN_ExposureMs,5.0000


# Group: RED_exp
# Preset: NewPreset
ConfigGroup,RED_exp,NewPreset,TTLSwitch,RED_ExposureMs,5.0000


# Group: CYAN_int
# Preset: NewPreset
ConfigGroup,CYAN_int,NewPreset,TTLSwitch,CYAN_Intensity,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TTLSwitch,CYAN_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,GREEN_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,RED_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,VIOLET_Intensity,500
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],TRIGGER
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,GLOBAL RESET
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE

# Group: Readout
# Preset: Standard
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],TRIGGER
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,GLOBAL RESET
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE

# Preset: Fast
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],VSYNC
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,DELAYED
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL

# Group: RED_int
# Preset: NewPreset
ConfigGroup,RED_int,NewPreset,TTLSwitch,RED_Intensity,0


# Group: GREEN_exp
# Preset: NewPreset
ConfigGroup,GREEN_exp,NewPreset,TTLSwitch,GREEN_ExposureMs,5.0000


# Group: VIOLET_exp
# Preset: NewPreset
ConfigGroup,VIOLET_exp,NewPreset,TTLSwitch,VIOLET_ExposureMs,5.0000


# Group: GREEN_int
# Preset: NewPreset
ConfigGroup,GREEN_int,NewPreset,TTLSwitch,GREEN_Intensity,0


# Group: CHANNEL_ST
# Preset: CYAN
ConfigGroup,CHANNEL_ST,CYAN,TTLSwitch,State,1

# Preset: RED
ConfigGroup,CHANNEL_ST,RED,TTLSwitch,State,3

# Preset: GREEN
ConfigGroup,CHANNEL_ST,GREEN,TTLSwitch,State,2

# Preset: VIOLET
ConfigGroup,CHANNEL_ST,VIOLET,TTLSwitch,State,0


# Group: CHANNEL_LBL
# Preset: CYAN
ConfigGroup,CHANNEL_LBL,CYAN,TTLSwitch,Label,CYAN

# Preset: RED
ConfigGroup,CHANNEL_LBL,RED,TTLSwitch,Label,RED

# Preset: GREEN
ConfigGroup,CHANNEL_LBL,GREEN,TTLSwitch,Label,GREEN

# Preset: VIOLET
ConfigGroup,CHANNEL_LBL,VIOLET,TTLSwitch,Label,VIOLET


# Group: VIOLET_int
# Preset: NewPreset
ConfigGroup,VIOLET_int,NewPreset,TTLSwitch,VIOLET_Intensity,0


# PixelSize settings
# Resolution preset: 3X
ConfigPixelSize,3X,HamamatsuHam_DCAM,CameraName,C16240-20UP
PixelSize_um,3X,1.5535
PixelSizeAffine,3X,-1.5495061299690158,0.019414679478257566,0.0,0.0017806472768335075,1.5575173288927935,0.0
