# Generated by Configurator on Mon Dec 16 19:36:22 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TTLSwitch,Lumencor,TTLSwitch
Device,XYStage,Dover,DoverXYStage
Device,ZStage,Dover,DoverStage
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective
Device,TargaStorage,Go2Scope,G2SBigTiffStorage

# Pre-init settings for devices
Property,COM1,AnswerTimeout,5000.0
Property,COM1,BaudRate,115200
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,TTLSwitch,Connection,192.168.201.200
Property,TTLSwitch,Port,COM1

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DObjective,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: CYAN_exp
# Preset: NewPreset
ConfigGroup,CYAN_exp,NewPreset,TTLSwitch,CYAN_ExposureMs,5.0000


# Group: RED_exp
# Preset: NewPreset
ConfigGroup,RED_exp,NewPreset,TTLSwitch,RED_ExposureMs,5.0000


# Group: CYAN_int
# Preset: NewPreset
ConfigGroup,CYAN_int,NewPreset,TTLSwitch,CYAN_Intensity,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TTLSwitch,CYAN_Intensity,1000
ConfigGroup,System,Startup,TTLSwitch,GREEN_Intensity,1000
ConfigGroup,System,Startup,TTLSwitch,RED_Intensity,1000
ConfigGroup,System,Startup,TTLSwitch,VIOLET_Intensity,1000
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],TRIGGER
ConfigGroup,System,Startup,XYStage,TransposeMirrorX,1
ConfigGroup,System,Startup,XYStage,TransposeMirrorY,1
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,GLOBAL RESET
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE


# Group: RED_int
# Preset: NewPreset
ConfigGroup,RED_int,NewPreset,TTLSwitch,RED_Intensity,0


# Group: GREEN_exp
# Preset: NewPreset
ConfigGroup,GREEN_exp,NewPreset,TTLSwitch,GREEN_ExposureMs,5.0000


# Group: VIOLET_exp
# Preset: NewPreset
ConfigGroup,VIOLET_exp,NewPreset,TTLSwitch,VIOLET_ExposureMs,5.0000


# Group: GREEN_int
# Preset: NewPreset
ConfigGroup,GREEN_int,NewPreset,TTLSwitch,GREEN_Intensity,0


# Group: VIOLET_int
# Preset: NewPreset
ConfigGroup,VIOLET_int,NewPreset,TTLSwitch,VIOLET_Intensity,0


# Group: CameraMode
# Preset: Sequence
ConfigGroup,CameraMode,Sequence,HamamatsuHam_DCAM,TRIGGER ACTIVE,LEVEL
ConfigGroup,CameraMode,Sequence,HamamatsuHam_DCAM,TRIGGER SOURCE,EXTERNAL
ConfigGroup,CameraMode,Sequence,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE

# Preset: Standard
ConfigGroup,CameraMode,Standard,HamamatsuHam_DCAM,TRIGGER ACTIVE,EDGE
ConfigGroup,CameraMode,Standard,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,CameraMode,Standard,HamamatsuHam_DCAM,TriggerPolarity,NEGATIVE


# Group: CHANNEL
# Preset: CYAN
ConfigGroup,CHANNEL,CYAN,TTLSwitch,State,1

# Preset: RED
ConfigGroup,CHANNEL,RED,TTLSwitch,State,3

# Preset: GREEN
ConfigGroup,CHANNEL,GREEN,TTLSwitch,State,2

# Preset: VIOLET
ConfigGroup,CHANNEL,VIOLET,TTLSwitch,State,0



# PixelSize settings
# Resolution preset: 10X
ConfigPixelSize,10X,HamamatsuHam_DCAM,CameraName,C16240-20UP
PixelSize_um,10X,0.4564
PixelSizeAffine,10X,-0.45652066177129536,0.0024406093727586623,0.0,0.0023299196317216847,0.45631184716895007,0.0

