# Generated by Configurator on Fri Nov 15 14:39:32 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,TTLSwitch,Lumencor,TTLSwitch
Device,XYStage,Dover,DoverXYStage
Device,ZStage,Dover,DoverStage
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective
Device,TargaStorage,Go2Scope,G2SBigTiffStorage
Device,OkoLab,Okolab,OkoLab

# Pre-init settings for devices
Property,COM1,AnswerTimeout,5000.0
Property,COM1,BaudRate,115200
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,TTLSwitch,Connection,192.168.201.200
Property,TTLSwitch,Port,COM1
Property,OkoLab,Device Adapter Version,2.2.0
Property,OkoLab,Device Port,COM11
Property,OkoLab,Okolib Version,1.3.0.0
Property,OkoLab,Time between refresh [ms],1000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DObjective,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: CYAN_exp
# Preset: NewPreset
ConfigGroup,CYAN_exp,NewPreset,TTLSwitch,CYAN_ExposureMs,5.0000


# Group: RED_exp
# Preset: NewPreset
ConfigGroup,RED_exp,NewPreset,TTLSwitch,RED_ExposureMs,5.0000


# Group: CYAN_int
# Preset: NewPreset
ConfigGroup,CYAN_int,NewPreset,TTLSwitch,CYAN_Intensity,0


# Group: EC Humidity
# Preset: NewPreset
ConfigGroup,EC Humidity,NewPreset,OkoLab,Humidity setpoint,90


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TTLSwitch,CYAN_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,GREEN_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,RED_Intensity,500
ConfigGroup,System,Startup,TTLSwitch,VIOLET_Intensity,500
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],TRIGGER
ConfigGroup,System,Startup,XYStage,TransposeMirrorX,1
ConfigGroup,System,Startup,XYStage,TransposeMirrorY,1
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,GLOBAL RESET
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE
ConfigGroup,System,Startup,OkoLab,Standby mode,Disabled

# Preset: Shutdown
ConfigGroup,System,Shutdown,TTLSwitch,CYAN_Intensity,0
ConfigGroup,System,Shutdown,TTLSwitch,GREEN_Intensity,0
ConfigGroup,System,Shutdown,TTLSwitch,RED_Intensity,0
ConfigGroup,System,Shutdown,TTLSwitch,VIOLET_Intensity,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],LOW
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],NEGATIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,System,Shutdown,XYStage,TransposeMirrorX,0
ConfigGroup,System,Shutdown,XYStage,TransposeMirrorY,0
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,DELAYED
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,System,Shutdown,OkoLab,Standby mode,Disabled


# Group: RED_int
# Preset: NewPreset
ConfigGroup,RED_int,NewPreset,TTLSwitch,RED_Intensity,0


# Group: Readout
# Preset: Standard
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],TRIGGER
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,GLOBAL RESET
ConfigGroup,Readout,Standard,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE

# Preset: Fast
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],VSYNC
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,TRIGGER GLOBAL EXPOSURE,DELAYED
ConfigGroup,Readout,Fast,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL


# Group: GREEN_exp
# Preset: NewPreset
ConfigGroup,GREEN_exp,NewPreset,TTLSwitch,GREEN_ExposureMs,5.0000


# Group: VIOLET_exp
# Preset: NewPreset
ConfigGroup,VIOLET_exp,NewPreset,TTLSwitch,VIOLET_ExposureMs,5.0000


# Group: EC Temp
# Preset: NewPreset
ConfigGroup,EC Temp,NewPreset,OkoLab,Temperature setpoint,40.0000


# Group: GREEN_int
# Preset: NewPreset
ConfigGroup,GREEN_int,NewPreset,TTLSwitch,GREEN_Intensity,0


# Group: EC Standby
# Preset: Enabled
ConfigGroup,EC Standby,Enabled,OkoLab,Standby mode,Enabled

# Preset: Disabled
ConfigGroup,EC Standby,Disabled,OkoLab,Standby mode,Disabled


# Group: VIOLET_int
# Preset: NewPreset
ConfigGroup,VIOLET_int,NewPreset,TTLSwitch,VIOLET_Intensity,0


# Group: EC CO2%
# Preset: NewPreset
ConfigGroup,EC CO2%,NewPreset,OkoLab,CO2 setpoint,4.0000


# Group: CHANNEL
# Preset: CYAN
ConfigGroup,CHANNEL,CYAN,TTLSwitch,State,1

# Preset: RED
ConfigGroup,CHANNEL,RED,TTLSwitch,State,3

# Preset: GREEN
ConfigGroup,CHANNEL,GREEN,TTLSwitch,State,2

# Preset: VIOLET
ConfigGroup,CHANNEL,VIOLET,TTLSwitch,State,0



# PixelSize settings
# Resolution preset: 3X
ConfigPixelSize,3X,HamamatsuHam_DCAM,CameraName,C16240-20UP
PixelSize_um,3X,1.5535
PixelSizeAffine,3X,-1.5495061299690158,0.019414679478257566,0.0,0.0017806472768335075,1.5575173288927935,0.0

